// Defines Global Variables
var PluginName="Spinalcord Mapper";
var MacroName="Orient Images";
var FileExt="TIF";
var MinNbFile=1;
var FolderSuffix="Oriented";
var SubDirArray=newArray("");
CellSeparator= "\t";
LineSeparator="\n";

/////////////// Header, Set Preferences, Options and Housekeeping
// Select All measurements, Invert Y, and use 9 decimals
run("Set Measurements...", "area mean standard modal min centroid center perimeter bounding fit shape feret's integrated median skewness kurtosis area_fraction stack display invert redirect=None decimal=9");
run("Line Width...", "line=1"); // Set Line width as 1
run("Input/Output...", "jpeg=100 gif=-1 file=.txt use copy_row save_column"); // Set Output as TXT and save columns and ignore row numbers
run("Point Tool...", "type=Hybrid color=Yellow size=Medium label show counter=0");// Set the Point tool as yellow Medium Circle
run("Colors...", "foreground=white background=black selection=Yellow"); // Set foreground and background colors Selection is yellow
run("Appearance...", "  menu=0 16-bit=Automatic"); // Change appareance of 16bit image as automatic
run("Misc...", "divide=Infinity"); // Make sure Miscellaneous Options are set correctly
run("Overlay Options...", "stroke=Orange width=1 point=Dot size=Medium fill=none apply show");
run("Labels...", "color=Orange font=10 show bold");
call("ij.Prefs.set", "tw.font.size",2);

// Set IJ Size and position
IJPosX=screenWidth*0.1; // The position of ImageJ in X
IJPosY=screenHeight*0; // The position of ImageJ in Y at the top of the screen
IJSizeX=575; // The width of ImageJ toolbar in pixel
IJSizeY=100; // The Height of ImageJ toolbar in pixel
Spacer=20; // A spacer
DummyVariable=eval("script","IJ.getInstance().setLocation("+IJPosX+","+IJPosY+");"); // Adjust the position of the ImageJ toolbar

// Set Toolbar Size and position
ToolbarSizeX=300; // Size of the toolbar
ToolbarSizeY=180; // Size of the toolbar
ToolbarPosX=IJPosX+IJSizeX+Spacer; // Position of the Toolbar is to the right of the ImageJ toolbar
ToolbarPosY=IJPosY; // Position of to the Toolbar in Y
// Check if the toolbar is present
ListWindows=getList("window.titles");
ToolbarPresent=0;
for(n=0; n<ListWindows.length; n++){
  WindowN=ListWindows[n];
  if(WindowN==PluginName+" Toolbar"){
    // If toolbar is present place it next to the IJ toolbar
    selectWindow(PluginName+" Toolbar");
    setLocation(ToolbarPosX,ToolbarPosY);
    ToolbarPresent=1;
  }
}
// If Toolbar is not present prompt to display it
// if(ToolbarPresent==0){
//   Dialog.create(PluginName+" Information");
//   Dialog.setInsets(0, 0, 0);
//   Dialog.addMessage("The "+PluginName+" Toolbar is currently inactive.");
//   Dialog.setInsets(0, 0, 0);
//   Dialog.addMessage("Do you want to start the "+PluginName+" Toolbar?");
//   Dialog.setInsets(0, 0, 0);
//   YesNoArray=newArray("No", "Yes");
//   Dialog.setInsets(0, 100, 0);
//   Dialog.addRadioButtonGroup("", YesNoArray, 2, 1, "Yes");
//   Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
//   Dialog.show();
//   UserChoice=Dialog.getRadioButton();
//   if(UserChoice=="Yes"){
//     run(PluginName+" Toolbar");
//     selectWindow(PluginName+" Toolbar");
//     setLocation(ToolbarPosX,ToolbarPosY);
//     ToolbarPresent=1;
//   }
// }

// Set Threshold Window Size and Position
ThresholdSizeX=290;
ThresholdSizeY=260;
ThresholdPosX=ToolbarPosX; // The Position in X of the threshold window
ThresholdPosY=ToolbarPosY+ToolbarSizeY+Spacer; // Threshold toolbar is just below the plugin toolbar
call("ij.Prefs.set", "threshold.loc", ThresholdPosX+" , "+ThresholdPosY);

// Set ROI Manager Size and Position
ROIManagerSizeX=290;
ROIManagerSizeY=260;
ROIManagerPosX=ToolbarPosX; // The Position in X of the ROI manager window which is to the right of the Treshold widnow
ROIManagerPosY=ThresholdPosY+ThresholdSizeY+Spacer;
call("ij.Prefs.set", "manager.loc", ROIManagerPosX+" , "+ROIManagerPosY);

// Set Results Size and Position to the right of the toolbar until the bottom of Threhsold window
ResultsSizeX=(screenWidth-(ToolbarPosX+ToolbarSizeX+Spacer));
ResultsSizeY=ROIManagerPosY;
ResultsPosX=ToolbarPosX+ToolbarSizeX+Spacer; // The Position in X of the ROI manager window
ResultsPosY=ToolbarPosY;
call("ij.Prefs.set", "results.loc", ResultsPosX+" , "+ResultsPosY);
call("ij.Prefs.set", "results.width", ResultsSizeX);
call("ij.Prefs.set", "results.height", ResultsSizeY);
//////////////// Header and Housekeeping





//////////////// General Functions
// Function to Append to an array
function Append(ArrayI, Value) {
  ArrayJ = newArray(ArrayI.length+1);
  for (ValueI=0; ValueI<ArrayI.length; ValueI++)
  ArrayJ[ValueI] = ArrayI[ValueI];
  ArrayJ[ArrayI.length] = Value;
  return ArrayJ;
}

// Function to display a message
var MessageDialogPass;
function MessageDialog(Message){
  MessageDialogPass=0;
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(Message);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  Dialog.show();
  MessageDialogPass=1;
}

// Function to display an error and propose to Fix it / Try again or to quit
var ErrorDialogPass;
function ErrorDialog(MessageError, MessageFix, MessageQuit){
  ErrorDialogPass=0;
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(MessageError);
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(MessageFix);
  Dialog.setInsets(0, 0, 0);
  TryAgainCancelCloseArray=newArray("Try Again", "Cancel & Close");
  Dialog.setInsets(0, 100, 0);
  Dialog.addRadioButtonGroup("", TryAgainCancelCloseArray, 2, 1, "Try Again");
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  Dialog.show();
  UserChoice=Dialog.getRadioButton();
  if(UserChoice=="Cancel & Close"){
    exit(MessageQuit);
  }
  ErrorDialogPass=1;
}


// Function to select an Input Directory containing at least MinNbFile with the correct File Extension FileExt
var SelectInputDirPass; // Switch for the dialog box
var InputDirPath; // Path of the input directory
var ParentDir; // ParentDirectory of the selected input directory
var InputDirName; // Name of the Input Directory
var NbFile; // Nb of File with the correct extension in the input directory
var InputList; // List of Files and folders in the input directory (all files no matter the extension)
var InputFileList; // List of files with the correct extension

function SelectInputDir(MinNbFile, FileExt){
  // MinNbFile This is the minimum Nb of File to be present in the list to be accepted
  // FileExt This is the File extension as a string example "tif"

  InputDirPath=getDirectory("Select a FOLDER containing at least "+MinNbFile+" "+FileExt+" Files to process.");
  InputList=getFileList(InputDirPath);
  ParentDir=File.getParent(InputDirPath)+File.separator;
  InputDirName=File.getName(InputDirPath);

  SelectInputDirPass=0; // Switch for the Function
  NbFile=0; // Count of Nb of Files
  BaseNameError=0; // Switch to make sure there is only one "." in the filename

  // Evaluate the Nb of File
  for (ItemI=0; ItemI<InputList.length; ItemI++){
    if(endsWith(toLowerCase(InputList[ItemI]), "."+toLowerCase(FileExt))){ // Select files with correct extension
      BasenameArray=split(InputList[ItemI],"."); // Make an array from the filename
      if(BasenameArray.length!=2){// if there is more than one . in the file name abort
        BaseNameError=1; // Switch the Basename to Error and create the message for the Dialog
        MessageError="Sorry but the "+FileExt+" File:\n\""+InputList[ItemI]+"\"\ncontains more than one \".\" in its filename.";
        MessageFix=MacroName+" function does NOT allow filenames with more than one unique \".\" used for the file extension.";
        MessageQuit=PluginName+ " Information:\nThe function "+ MacroName+" stopped because the File \""+InputList[ItemI]+"\" contains more than one \".\"\nMake sure filenames have no more than one unique \".\" for the File extension.";
      } else {
        NbFile++; // Increment the nb of files with the correct extension
      }
    } // If ends by Extension increment
  } // End of evaluate NbFile with correct extension

  if(NbFile<MinNbFile){ // If the Nb of File with correct extension is not at least equal to the MinNbFile Create Error Message.
    MessageError="Sorry but the Folder: \"" +InputDirName+"\" does not contain at least "+MinNbFile+" "+FileExt+" File.";
    MessageFix=MacroName+" requires a Folder that contains at least "+MinNbFile+" "+FileExt+" File.";
    MessageQuit=PluginName+ " Information:\nThe function "+ MacroName+" stopped because the Folder: \"" +InputDirName+"\" did not contain at least "+MinNbFile+" "+FileExt+" File.";
  }

  if(NbFile<MinNbFile || BaseNameError==1){ // If filenames have more than 1 "." OR if there is not enough file with the correct extension display an error
  ErrorDialog(MessageError, MessageFix, MessageQuit);
}else{ // Else if there is no error
  SelectInputDirPass=1; // InputDir Pass the criteria
  InputFileList=newArray(0); // Create a new array with the files having the correct extension
  for(ItemI=0; ItemI<InputList.length;ItemI++){
    BasenameArray=split(InputList[ItemI],"."); // Split the filename and the extension
    if(endsWith(toLowerCase(InputList[ItemI]), "."+toLowerCase(FileExt))){ // If the extension is correct
      FileName=BasenameArray[0]+"."+BasenameArray[1]; // Recreate the filename with the extension
      InputFileList=Append(InputFileList,FileName); // Append it to the InputFileList
    }// End of IF endswith
  }// End for each File
} // End of else
} // End of Function Select InputDir


// Function to create a new output directory
var OutputDirPath; // The path of the output directory
var OutputDirName; // The name of the output directory
function CreateOutputDir(FolderSuffix){ // Folder suffix is a string appended to the input Directory
  OutputDirPath=ParentDir+InputDirName+"_"+FolderSuffix+File.separator; // Create the outputdirpath
  n=1;
  while(File.exists(OutputDirPath)!=0){ // If the path already exist, increment with _ n until it does not exist
    n++;
    OutputDirPath=ParentDir+InputDirName+"_"+FolderSuffix+"_"+n+File.separator;
  } // End of making sure the outpudirectory is a new folder
  File.makeDirectory(OutputDirPath); // Create the outpudirectory
  OutputDirName=File.getName(OutputDirPath); // Get the Name of the output directory
}

// Function to create subfolders within the newly create outputdirectory
function CreateOutputSubDir(SubDirArray) { // SubDirArray is an array of the desired subfolders
  for(i=0;i<SubDirArray.length;i++){
    SubDirPath=OutputDirPath+SubDirArray[i]+File.separator; // Because outpudirpath is unique and new the subfolders do not exist yet so no need to check if they are already present
    File.makeDirectory(SubDirPath);
  } // End of for
} // End of CreateOutputSubDir function
// NOTE:It is useful to create a string for the subdirectory paths
// For each element in the subdirarray addMessage
// Output[SubDirArrayElementN]Path=""+OutputDirPath+"[SubDirArrayElementN]"+File.separator;
// Then you can use directly the string to save within a subdirectory


// This function Prompt for a specific type of selection and ensure a selection is made before moving next
var SelectionPromptPass; // This is the switch when the selection pass the criteria
function SelectionPrompt(SelectionName, SelectionInfo){
  // Selection name is the name of the selection. It is a string that can take the following values:
  // rectangle, oval, polygon, freehand, traced, straight line, segmented line, freehandline, angle, point, multipoint
  // SelectionInfo is a string that explains what the Seleciton should be
  SelectionPromptPass=0;
  // Define what the SelectionType value for each selection
  if(SelectionName=="rectangle"){
    SelectionValue=0;
  } else if(SelectionName=="oval"){
    SelectionValue=1;
  } else if(SelectionName=="polygon"){
    SelectionValue=2;
  } else if(SelectionName=="freehand"){
    SelectionValue=3;
  } else if(SelectionName=="traced"){
    SelectionValue=4;
  } else if(SelectionName=="straight line"){
    SelectionValue=5;
  } else if(SelectionName=="segmented line"){
    SelectionValue=6;
  } else if(SelectionName=="freehand line"){
    SelectionValue=7;
  } else if(SelectionName=="angle"){
    SelectionValue=8;
  } else if(SelectionName=="point"){
    SelectionValue=10;
  } else if(SelectionName=="multipoint"){
    SelectionValue=10;
  } else {
    SelectionValue=-1; // No selection
  }

  CurrentImageName=getTitle(); // Get the Image of the Current Image
  CurrentSelection=selectionType(); // Get the Current selection

  // If the currentselection does not match the expected selection but if there is something in the overlay
  if(CurrentSelection!=SelectionValue && Overlay.size==1){
    run("Show Overlay");
    Overlay.activateSelection(0); // Get the selection from the overlay
    CurrentSelection=selectionType(); // refresh Current selection
  }

  if(CurrentSelection==SelectionValue){ // If a correct Selection is present ask what to do
    setBatchMode("show");
    selectWindow(CurrentImageName);
    setLocation(IJPosX, IJPosY+IJSizeY+Spacer, IJSizeX, screenHeight*0.75);
    Dialog.create(PluginName+" Information");
    Dialog.setInsets(0, 0, 0);
    Dialog.addMessage("Would you like to adjust the current "+SelectionName+" selection?");
    Dialog.setInsets(0, 0, 0);
    Dialog.addMessage(SelectionInfo);
    UserChoiceArray=newArray("Keep the current "+SelectionName+" selection", "Let me adjust it", "Discard it");
    Dialog.setInsets(0, 50, 0);
    Dialog.addRadioButtonGroup("", UserChoiceArray, 3,1, "Keep the current "+SelectionName+" selection");
    Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
    Dialog.show();
    UserChoice=Dialog.getRadioButton();
    if(UserChoice=="Keep the current "+SelectionName+" selection"){
      setBatchMode("show");
      SelectionPromptPass=1;
    } else if (UserChoice=="Discard it"){ // else User wants to adjust the selection
      run("Remove Overlay");
      run("Select None");
        SelectionPromptPass=0; // Set the Switch to 0
    } else {
      SelectionPromptPass=0; // Set the Switch to 0
    }
  } else { // Else the current selection does not match the expected selection
    SelectionPromptPass=0;
    run("Select None");
  }

  if(SelectionPromptPass==0){ // If the selection is not set prompt or does not correspond to the expected selection
    setBatchMode("show");
    selectWindow(CurrentImageName);
    setLocation(IJPosX, IJPosY+IJSizeY+Spacer, IJSizeX, screenHeight*0.75);
    run("Hide Overlay");
    setTool(SelectionName);
    if(SelectionName=="multipoint"){
      setTool("multipoint");
      run("Point Tool...", "type=Hybrid color=Yellow size=Medium label show counter=0"); // Set the Point tool as yellow Medium Circle
      doCommand("Point Tool..."); // Bring the non-modal Point Tool at front in a separate thread
    }
    waitForUser(PluginName+" Information", "Draw a "+SelectionName+" selection.\n"
    +SelectionInfo+
    "\nWhen done, press OK.");
    CurrentSelection=selectionType();
    if(CurrentSelection<0 || CurrentSelection!=SelectionValue){
      if(CurrentSelection<0){
        MessageError="Sorry but no "+SelectionName+" selection was detected.";
        MessageFix=MacroName+" function requires a "+SelectionName+" selection.";
        MessageQuit=PluginName+ " Information:\nThe function "+ MacroName+" stopped because no "+SelectionName+" was detected.";
      } else if(CurrentSelection!=SelectionValue){
        MessageError="Sorry but the Selection is not a "+SelectionName+".";
        MessageFix=MacroName+" function requires a "+SelectionName+" selection.";
        MessageQuit=PluginName+ " Information:\nThe function "+ MacroName+" stopped because the provided selection was not a "+SelectionName+".";
      }
      ErrorDialog(MessageError,MessageFix,MessageQuit);
      run("Select None");
    } else {
      SelectionPromptPass=1;
      setBatchMode("hide");

    }// End of else Selection is good
  } // End of If selection does not pass prompt for a selection
} // End of Function Get selection
////////////////////End of General Functions















/////////Specific Functions
var ProcessMethod; // Switch for Processing Method
function ProcessMethodPrompt (){
  ProcessMethodPromptPass=0;
  ProcessMethod=call("ij.Prefs.get", "Default."+PluginName+"."+MacroName+".ProcessingMethod", "Global");
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage("Select your Processing Method:");
  Dialog.addRadioButtonGroup("", newArray("Global","Individual"), 2, 1, ProcessMethod)
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  Dialog.show();
  ProcessMethod = Dialog.getRadioButton;
  ProcessMethodPromptPass=1;
  call("ij.Prefs.set", "Default."+PluginName+"."+MacroName+".ProcessingMethod", ProcessMethod);
  /////////////////////// Initial Dialog Box
} // End of function


// Function to transform
var Transformation;
function TransformationPrompt (){
  TransformationPromptPass=0;
  Transformation=call("ij.Prefs.get", "Default."+PluginName+"."+MacroName+".Transformation", "None");
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage("Select the Transformation:");
  TransformationArray = newArray("None","Rotate 90 Left", "Rotate 90 Right", "Rotate 180","Flip Horizontally", "Flip Vertically");
  Dialog.addRadioButtonGroup("Transformation:", TransformationArray, 3, 2, Transformation)
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  Dialog.show();
  Transformation = Dialog.getRadioButton;
  TransformationPromptPass=1;
  call("ij.Prefs.set", "Default."+PluginName+"."+MacroName+".Transformation", Transformation);
  /////////////////////// Initial Dialog Box
} // End of function


// Function to apply the transformation
function rotate90R(){run("Rotate 90 Degrees Right");}
function rotate90L(){run("Rotate 90 Degrees Left");}
function rotate180(){run("Rotate 90 Degrees Right");run("Rotate 90 Degrees Right");}
function FlipH(){run("Flip Horizontally");}
function FlipV(){run("Flip Vertically");}
////////////////////End of Functions
/////////End Of Specific Functions





InitialMessage=""+MacroName+" will :"
+"\n- Prompt to select a Folder containing at least "+MinNbFile+" "+FileExt+" File to process"
+"\n- Prompt to select the Processing Method"
+"\n    Global: Apply the same transformation to all files"
+"\n    Individual: Prompt and Apply transformation for each file"
+"\n\nFor each "+FileExt+" File:"
+"\n- Apply the selected Transformation"
+"\n- Save the Images as TIF Files in a new folder";

MessageDialog(InitialMessage);

do{
  SelectInputDir(MinNbFile,FileExt);
}while(SelectInputDirPass!=1)

ProcessMethodPrompt();

if(ProcessMethod=="Global"){

  TransformationPrompt();
  FolderSuffix=FolderSuffix+"_"+Transformation;
  CreateOutputDir(FolderSuffix);
  setBatchMode(true); // Turn ON the batch mode;

  // Start of the loop going through the list of files in the input folder selected above
  for (FileI = 0; FileI < InputFileList.length; FileI++){
    InputFileNameI=InputFileList[FileI];
    InputFilePathI = InputDirPath+InputFileNameI;
    open(InputFilePathI);
    if(Transformation=="Rotate 90 Left"){
      rotate90L();
    } else if(Transformation=="Rotate 90 Right"){
      rotate90R();
    } else if(Transformation =="Rotate 180"){
      rotate180();
    } else if(Transformation =="Flip Horizontally"){
      FlipH();
    } else if(Transformation =="Flip Vertically"){
      FlipV();
    }
    saveAs("Tif", OutputDirPath+File.nameWithoutExtension);
    close();
    showProgress(FileI, InputFileList.length);
  }// End of ForFileI

} else { //////////////////////////////// ProcessMethod is Individual
  CreateOutputDir(FolderSuffix);
  setBatchMode(true); // Turn ON the batch mode;
  // Start of the loop going through the list of files in the input folder selected above
  for (FileI = 0; FileI < InputFileList.length; FileI++){
    InputFileNameI=InputFileList[FileI];
    InputFilePathI = InputDirPath+InputFileNameI;

    open(InputFilePathI);
    setBatchMode("show");
    setLocation(IJPosX,IJPosY+IJSizeY+Spacer, IJSizeX, screenHeight*0.5);
    TransformationPrompt();
    setBatchMode("hide");

    if(Transformation=="Rotate 90 Left"){
      rotate90L();
    } else if(Transformation=="Rotate 90 Right"){
      rotate90R();
    } else if(Transformation =="Rotate 180"){
      rotate180();
    } else if(Transformation =="Flip Horizontally"){
      FlipH();
    } else if(Transformation =="Flip Vertically"){
      FlipV();
    }
    saveAs("Tif", OutputDirPath+File.nameWithoutExtension+"_"+Transformation);
    // Alternatively you can remove the Transformation from within the filename but you will loose track of the modification
    //saveAs("Tif", OutputDirPath+File.nameWithoutExtension);
    close();
    showProgress(FileI, InputFileList.length);
  }// End of ForFileI
}

///////////////////////// Close Utility windows
// Close Threshold windows if it is open
if(isOpen("Threshold")){
  selectWindow("Threshold");
  run("Close");
}//end of if threshold is open
// Close results windows if it is open
if(isOpen("Results")){
  run("Clear Results");
  selectWindow("Results");
  run("Close");
}//end of if Results is open
//Close the ROI Manager
if(isOpen("ROI Manager")){
  roiManager("reset");
  selectWindow("ROI Manager");
  run("Close");
}//End of Close the ROI Manager
///////////////////////// Close Utility windows
beep();


////////////////////// Closing Dialog Box
Dialog.create(PluginName+" Information");
Dialog.setInsets(0, 0, 0);
Dialog.addMessage(NbFile+" "+ FileExt+ " Files in the folder:\n"+InputDirName+"\nhave been processed successfully.");
Dialog.setInsets(0, 0, 0);
Dialog.addMessage("Files are saved in the following folder:\n"+OutputDirName+".");
Dialog.setInsets(0, 0, 0);
Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
Dialog.show();
